PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 2
  Units = height
  Window size (pixels) = [1600, 900]
  backgroundFit = fill
  expName = Go No-Go
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Instructions
    RoutineSettingsComponent Instructions
      saveStartStop = False
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    TextComponent text_Instructions
      letterHeight = 0.04
      pos = (0, 0.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        ในเกมนี้จะมี แมว และ หนู โผล่มาให้ดูบนหน้าจอ

        โดยที่ ถ้าเห็นหนูบนหน้าจอ ให้กดปุ่ม Space เพื่อจับมัน
        แต่ ถ้าเห็นแมว ไม่ต้องกดปุ่มอะไร ให้ปล่อยมันไปจับหนู

        ในตอนฝึกเล่น
        ถ้าทำถูก จะมีการบอกว่า ถูกต้อง!
        ถ้าทำผิด ก็จะมีการบอกว่า ผิด!

        กดปุ่ม Space เพื่อไปฝึกเล่น
    KeyboardComponent key_Instructions
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine GoNoGoTask
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    CodeComponent code
      Code Type = JS
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      Begin JS Routine:
        if ((condition === "go")) {
            space_key = "space";
        } else {
            space_key = "None";
        }

        duration = Math.floor(Math.random() * 3) + 1;

        duration2 = duration+1.5;
      End JS Routine:
        if (typeof key_resp.keys === 'undefined') {
           key_resp.rt = duration2;
           key_resp.duration = 'nokey';
        //   key_resp.keys = 'nokey1';

        }
        psychoJS.experiment.addData('key_resp.rt', key_resp.rt);
        psychoJS.experiment.addData('key_resp.duration', key_resp.duration);
        //psychoJS.experiment.addData('key_resp.keys', key_resp.keys);
    ImageComponent image_circle
      image [set every repeat] = $color
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      syncScreenRefresh = False
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    TextComponent text_gonogo_ITI
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration2
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $space_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration2
      store = first key
      storeCorrect = True
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  Routine Welcome
    RoutineSettingsComponent Welcome
      saveStartStop = False
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    TextComponent text_welcome
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, 0.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        ยินดีต้อนรับสู่ Go/No-go task
        กดปุ่ม Space เพื่อดำเนินการต่อ
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Feedback
    RoutineSettingsComponent Feedback
      saveStartStop = False
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    CodeComponent code_Feedback
      Code Type = JS
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      Begin JS Routine:
        if ((key_resp.corr === 1)) {
            feedback_text = "Correct";
        } else {
            if ((key_resp.corr === 0)) {
                feedback_text = "Incorrect";
            }
        }
    TextComponent text_feedback
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $feedback_text
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  Routine End
    RoutineSettingsComponent End
      saveStartStop = False
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    CodeComponent code_2
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'A5KUl1eQoEtY', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
    TextComponent text_end
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = ขอบคุณสำหรับการเข้าร่วม
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    KeyboardComponent key_resp_End
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Tutorial
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    CodeComponent code_Tutorial
      Code Type = JS
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      Begin JS Routine:
        if ((condition === "go")) {
            space_key = "space";
        } else {
            space_key = "None";
        }

        duration = Math.floor(Math.random() * 3) + 1;

        duration2 = duration+1.5;
      End JS Routine:
        if (typeof key_resp_t.keys === 'undefined') {
           key_resp_t.rt = duration2;
           key_resp_t.duration = 'nokey';
        //   key_resp.keys = 'nokey1';

        }
        psychoJS.experiment.addData('key_resp_t.rt', key_resp_t.rt);
        psychoJS.experiment.addData('key_resp_t.duration', key_resp_t.duration);
        //psychoJS.experiment.addData('key_resp.keys', key_resp.keys);
    ImageComponent image_Tutorial
      image [set every repeat] = $color
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      stopVal [duration (s)]:
        $duration
    TextComponent text_Tutorial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $duration2
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    KeyboardComponent key_resp_t
      allowedKeys = 'space'
      correctAns = $space_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration2
      store = first key
      storeCorrect = True
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  Routine Instructions_2
    RoutineSettingsComponent Instructions_2
      saveStartStop = False
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    TextComponent text_Instructions_2
      letterHeight = 0.05
      pos = (0, 0.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        เมื่อเริ่มเล่นจริง จะไม่มีการบอกว่าถูกหรือผิด

        กดปุ่ม Space เพื่อไปเล่นจริง
    KeyboardComponent key_Instructions_2
      allowedKeys = 'r','space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Fixation
    RoutineSettingsComponent Fixation
      saveStartStop = False
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    TextComponent text_Fixation
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
      text = +
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  Routine Feedback_Tutorial_2
    RoutineSettingsComponent Feedback_Tutorial_2
      saveStartStop = False
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    CodeComponent code_Feedback_Tutorial
      Code Type = JS
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      Begin JS Routine:
        if ((key_resp_t.corr === 1)) {
            feedback_text = "ถูกต้อง!";
        } else {
            if ((key_resp_t.corr === 0)) {
                feedback_text = "ผิด!";
            }
        }
    TextComponent text_feedback_Tutorial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      syncScreenRefresh = False
      text [set every repeat] = $feedback_text
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  Routine countdown
    RoutineSettingsComponent countdown
      saveStartStop = False
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    TextComponent text_3
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 3
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    TextComponent text_2
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 2
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    TextComponent text_1
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 1
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Flow
  Routine Welcome
  Routine Instructions
  Routine countdown
  LoopInitiator Play_t loopType="TrialHandler"
    conditionsFile = Tutorial.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('color', 'Images/mice.png'), ('condition', 'go'), ('space_key', 'space')]),
      OrderedDict([('color', 'Images/mice.png'), ('condition', 'go'), ('space_key', 'space')]),
      OrderedDict([('color', 'Images/cat.png'), ('condition', 'nogo'), ('space_key', None)]),
      OrderedDict([('color', 'Images/cat.png'), ('condition', 'nogo'), ('space_key', None)]),
      OrderedDict([('color', 'Images/mice.png'), ('condition', 'go'), ('space_key', 'space')]),
      OrderedDict([('color', 'Images/cat.png'), ('condition', 'nogo'), ('space_key', None)])]
    Routine Fixation
    Routine Tutorial
    Routine Feedback_Tutorial_2
  LoopTerminator Play_t
  Routine Instructions_2
  Routine countdown
  LoopInitiator Play loopType="TrialHandler"
    conditionsFile = stimulus_Color.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'color': 'Images/mice.png', 'condition': 'go', 'space_key': 'space'},
      {'color': 'Images/cat.png', 'condition': 'nogo', 'space_key': 'None'},
      {'color': 'Images/mice.png', 'condition': 'go', 'space_key': 'space'},
      {'color': 'Images/mice.png', 'condition': 'go', 'space_key': 'space'},
      {'color': 'Images/cat.png', 'condition': 'nogo', 'space_key': 'None'},
      {'color': 'Images/mice.png', 'condition': 'go', 'space_key': 'space'},
      {'color': 'Images/mice.png', 'condition': 'go', 'space_key': 'space'},
      {'color': 'Images/mice.png', 'condition': 'go', 'space_key': 'space'}]
    Routine Fixation
    Routine GoNoGoTask
  LoopTerminator Play
  Routine End
